# Generated by Configurator on Mon Dec 04 14:52:25 IST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,Olympus IX83,OlympusIX83,Olympus IX83
Device,Objective,OlympusIX83,Objective
Device,Light Path,OlympusIX83,Light Path
Device,Condenser turret,OlympusIX83,Condenser turret
Device,Polarizer,OlympusIX83,Polarizer
Device,Dichroic 1,OlympusIX83,Dichroic 1
Device,EpiShutter 1,OlympusIX83,EpiShutter 1
Device,DiaShutter,OlympusIX83,DiaShutter
Device,TransmittedIllumination 1,OlympusIX83,TransmittedIllumination 1
Device,TransmittedIllumination 2,OlympusIX83,TransmittedIllumination 2
Device,Transmitted Aperture,OlympusIX83,Transmitted Aperture
Device,FocusDrive,OlympusIX83,FocusDrive
Device,XYStage,OlympusIX83,XYStage
Device,Autofocus,OlympusIX83,Autofocus
Device,AutofocusDrive,OlympusIX83,AutofocusDrive
Device,Andor_cam1,AndorSDK3,Andor sCMOS Camera

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Objective,Olympus IX83
Parent,Light Path,Olympus IX83
Parent,Condenser turret,Olympus IX83
Parent,Polarizer,Olympus IX83
Parent,Dichroic 1,Olympus IX83
Parent,EpiShutter 1,Olympus IX83
Parent,DiaShutter,Olympus IX83
Parent,TransmittedIllumination 1,Olympus IX83
Parent,TransmittedIllumination 2,Olympus IX83
Parent,Transmitted Aperture,Olympus IX83
Parent,FocusDrive,Olympus IX83
Parent,XYStage,Olympus IX83
Parent,Autofocus,Olympus IX83
Parent,AutofocusDrive,Olympus IX83

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,1
FocusDirection,AutofocusDrive,1

# Roles
Property,Core,Camera,Andor_cam1
Property,Core,Shutter,EpiShutter 1
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,6-40X_0.95
Label,Objective,4,5-100X
Label,Objective,3,4-60X
Label,Objective,2,3-40X
Label,Objective,1,2-20X
Label,Objective,0,1-10X
# Light Path
Label,Light Path,2,3-Eyepiece
Label,Light Path,1,2-50-50
Label,Light Path,0,1-LeftPort
# Condenser turret
Label,Condenser turret,6,7-NONE
Label,Condenser turret,5,6-NONE
Label,Condenser turret,4,5-NONE
Label,Condenser turret,3,4-NONE
Label,Condenser turret,2,3-IX2-DIC10
Label,Condenser turret,1,2-IX-PH2
Label,Condenser turret,0,1-IX-PHC
# Polarizer
Label,Polarizer,1,2-In
Label,Polarizer,0,1-Out
# Dichroic 1
Label,Dichroic 1,7,8-NONE
Label,Dichroic 1,6,7-EGFP
Label,Dichroic 1,5,6-CY5
Label,Dichroic 1,4,5-TxRed
Label,Dichroic 1,3,4-TRITC
Label,Dichroic 1,2,3-FITC
Label,Dichroic 1,1,2-DAPI
Label,Dichroic 1,0,1-BF

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

